<?xml version="1.0" encoding="UTF-8"?>
<experiment xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
            xsi:noNamespaceSchemaLocation="https://files.labbench.io/xsd/7.0/experiment.xsd">
   <participant-validator 
      regex="^S[0-9]{3}$"
      advice="Please enter an ID in the form of SXXX, where X is a digit" />

   <experimental-setup-variants default="JOYSTICK">         
      <experimental-setup name="Joystick" id="JOYSTICK">
         <devices>
            <joystick id="joystick">
               <map experimental-setup-id="stroopSetup">
                  <button-assignment code="4" button="button-01" label="blue" />
                  <button-assignment code="8" button="button-02" label="yellow" />
                  <button-assignment code="1" button="button-03" label="red" />
                  <button-assignment code="2" button="button-04" label="green" />
               </map>
            </joystick>
    
            <display id="display"
                     normative-distance="40">

                <typography active-colour="rgb(255,255,255)"
                            background-colour="rgb(0,0,0)"
                            inactive-colour="rgb(32,32,32)" />                    

               <configurations>
                  <image-display id="image" experimental-setup-id="stroopSetup" background-colour="rgb(0,0,0)" />
               </configurations>                
            </display>         
         </devices>
         <device-mapping>
            <device-assignment device-id="joystick" instrument-name="Button" />
            <device-assignment instrument-name="ImageDisplay" device-id="display.image"/>
            <device-assignment device-id="joystick" instrument-name="TriggerGenerator" />
         </device-mapping>        
      </experimental-setup>    
      <experimental-setup name="LabBench I/O" id="LIO">
         <devices>
            <display id="display" normative-distance="40">
                <typography active-colour="rgb(255,255,255)"
                            background-colour="rgb(0,0,0)"
                            inactive-colour="rgb(32,32,32)" />                    

               <configurations>
                  <image-display id="image" experimental-setup-id="stroopSetup" background-colour="rgb(0,0,0)" />
               </configurations>
            </display>

            <lio id="lio" default-analogue-output="0">
               <trigger-setup low-byte-voltage-level="unconnected" high-byte-voltage-level="unconnected" logic-system="positive"/>               
               <response-devices>
                  <response-pad id="pad" timing-source="response-port02" type="button-4-cross">
                     <map experimental-setup-id="stroopSetup">
                        <button-assignment code="1" button="button-01" label="blue" />
                        <button-assignment code="2" button="button-02" label="yellow" />
                        <button-assignment code="3" button="button-03" label="red" />
                        <button-assignment code="4" button="button-04" label="green" />
                     </map>
                  </response-pad>
                  <visual-trigger id="trigger" timing-source="response-port02"/>
                  </response-devices>
            </lio>
         </devices>
         <device-mapping>
            <device-assignment instrument-name="ImageDisplay" device-id="display.image"/>
            <device-assignment instrument-name="Button" device-id="lio.pad"/>          
            <device-assignment device-id="lio" instrument-name="TriggerGenerator" />
         </device-mapping>
      </experimental-setup>        
   </experimental-setup-variants>
   
   <protocol>
      <variables>
         <variable name="StroopStimulusRepetitions" value="6"/>
         <variable name="StroopDisplayTime" value="1500"/>
         <variable name="StroopColors" value="{'b': '#0000FF','y': '#FFFF00','r': '#FF0000','g': '#00FF00'}"/>
         <variable name="StroopWords" value="{'b': 'BLUE','y': 'YELLOW','r': 'RED','g': 'GREEN'}"/>
      </variables>
      <templates>
         <procedure-templates>
            <stimulation-sequence id="NSTROOPTrial"
               experimental-setup-id="stroopSetup"
               response-collection="yes-no"
               stimulus-update-rate="10000">

               <procedure-events complete="func: StroopScript.StroopEvaluate(tc)" />

               <properties>
                  <participant-instructions 
                     experimental-setup-id="stroopSetup" 
                     default="Assets.StroopInstructions.NeutralStroopJoystick if ExperimentalSetup == 'JOYSTICK' else Assets.StroopInstructions.NeutralStroopPAD"/>
               </properties>                                

               <configuration>
                  <trigger-generation trigger-source="none" />
               </configuration>
              
               <stimulation-scripts 
                  initialise="True"
                  stimulate="func: StroopScript.StroopNeutralStimulate(tc,x)"
                  stimulus-description="Image"
                  stimulus-unit="N/A">
                  <instrument name="ImageDisplay" interface="image-display"/>
                  <instrument name="TriggerGenerator" interface="trigger-generator" />
               </stimulation-scripts>
    
               <stimulation-pattern time-base="seconds">
                  <sequence iterations="1">
                     <sequence iterations="1" Tperiod="4" stimulate="false" />    
                     <uniformly-distributed-sequence minTperiod="3" maxTperiod="5" iterations="NumberOfStimuli" />
                  </sequence>
               </stimulation-pattern>
    
               <stimuli order="block-randomised">
                  <stimulus name="rn" />
                  <stimulus name="gn" />
                  <stimulus name="bn" />
                  <stimulus name="yn" />                
               </stimuli>
            </stimulation-sequence>

            <stimulation-sequence id="NSTROOP"
               experimental-setup-id="stroopSetup"
               response-collection="yes-no"
               stimulus-update-rate="10000">

               <procedure-events complete="func: StroopScript.StroopEvaluate(tc)" />
                
               <properties>
                  <participant-instructions 
                     experimental-setup-id="stroopSetup" 
                     default="Assets.StroopInstructions.NeutralStroopJoystick if ExperimentalSetup == 'JOYSTICK' else Assets.StroopInstructions.NeutralStroopPAD"/>
               </properties>                                

               <dependencies>
                  <dependency id="NSTROOPTrial"/>
               </dependencies>

               <stimulation-scripts 
                  initialise="True"
                  stimulate="func: StroopScript.StroopNeutralStimulate(tc,x)"
                  stimulus-description="Image"
                  stimulus-unit="N/A">
                  <instrument name="ImageDisplay" interface="image-display"/>
                  <instrument name="TriggerGenerator" interface="trigger-generator" />
               </stimulation-scripts>
    
                <stimulation-pattern time-base="seconds">
                    <sequence iterations="1">
                        <sequence iterations="1" Tperiod="4" stimulate="false" />                        
                        <uniformly-distributed-sequence minTperiod="3" maxTperiod="5" iterations="StroopStimulusRepetitions * NumberOfStimuli" />
                    </sequence>
                </stimulation-pattern>
    
                <stimuli order="block-randomised">
                    <stimulus name="rn" />
                    <stimulus name="gn" />
                    <stimulus name="bn" />
                    <stimulus name="yn" />
                </stimuli>
            </stimulation-sequence>

            <stimulation-sequence id="STROOPTrial"
               experimental-setup-id="stroopSetup"
               response-collection="yes-no"
               stimulus-update-rate="10000">

               <procedure-events complete="func: StroopScript.StroopEvaluate(tc)" />

               <properties>
                  <participant-instructions 
                     experimental-setup-id="stroopSetup" 
                     default="Assets.StroopInstructions.StroopJoystick if ExperimentalSetup == 'JOYSTICK' else Assets.StroopInstructions.StroopPAD"/>
               </properties>                                                    
               
               <stimulation-scripts 
                  initialise="True"
                  stimulate="func: StroopScript.StroopStimulate(tc,x)"
                  stimulus-description="Image"
                  stimulus-unit="N/A">
                  <instrument name="ImageDisplay" interface="image-display"/>
                  <instrument name="TriggerGenerator" interface="trigger-generator" />
               </stimulation-scripts>
    
               <stimulation-pattern time-base="seconds">
                  <sequence iterations="1">
                     <sequence iterations="1" Tperiod="4" stimulate="false" />    
                     <uniformly-distributed-sequence minTperiod="3" maxTperiod="5" iterations="NumberOfStimuli" />
                  </sequence>
               </stimulation-pattern>
    
               <stimuli order="block-randomised">
                  <stimulus name="rr" />
                  <stimulus name="gg" />
                  <stimulus name="bb" />
                  <stimulus name="yy" />
                  <stimulus name="rg" />
                  <stimulus name="gb" />
                  <stimulus name="by" />
                  <stimulus name="yr" />
               </stimuli>
            </stimulation-sequence>

            <stimulation-sequence id="STROOP"
               experimental-setup-id="stroopSetup"
               response-collection="yes-no"
               stimulus-update-rate="10000">

               <procedure-events complete="func: StroopScript.StroopEvaluate(tc)" />
    
               <properties>
                  <participant-instructions 
                     experimental-setup-id="stroopSetup" 
                     default="Assets.StroopInstructions.StroopJoystick if ExperimentalSetup == 'JOYSTICK' else Assets.StroopInstructions.StroopPAD"/>
               </properties>                                                    

               <dependencies>
                  <dependency id="STROOPTrial"/>
               </dependencies>

               <stimulation-scripts 
                  initialise="True"
                  stimulate="func: StroopScript.StroopStimulate(tc,x)"
                  stimulus-description="Image"
                  stimulus-unit="N/A">
                  <instrument name="ImageDisplay" interface="image-display"/>
                  <instrument name="TriggerGenerator" interface="trigger-generator" />
               </stimulation-scripts>
    
               <stimulation-pattern time-base="seconds">
                  <sequence iterations="1">
                     <sequence iterations="1" Tperiod="4" stimulate="false" />
                     <uniformly-distributed-sequence minTperiod="3" maxTperiod="5" iterations="(StroopStimulusRepetitions/3)*NumberOfStimuli" />
                  </sequence>
               </stimulation-pattern>
    
               <stimuli order="block-randomised">
                  <stimulus name="rr" count="3" />
                  <stimulus name="rg" />
                  <stimulus name="rb" />
                  <stimulus name="ry" />

                  <stimulus name="gr" />
                  <stimulus name="gg" count="3"/>
                  <stimulus name="gb" />
                  <stimulus name="gy" />

                  <stimulus name="br" />
                  <stimulus name="bg" />
                  <stimulus name="bb" count="3"/>
                  <stimulus name="by" />

                  <stimulus name="yr" />
                  <stimulus name="yb" />
                  <stimulus name="yg" />
                  <stimulus name="yy" count="3"/>
               </stimuli>
            </stimulation-sequence>        
         </procedure-templates>
      </templates>
        <procedures>
            <stimulation-sequence-constructor id="NSTROOPTrial" 
               name="Neutral Stroop Task (Trial)"
               template="NSTROOPTrial"/>        
            
            <stimulation-sequence-constructor id="NSTROOP" 
               name="Neutral Stroop Task"
               template="NSTROOP"/>

            <stimulation-sequence-constructor id="STROOPTrial" 
               name="Stroop Task (Trial)"
               template="STROOPTrial"/>
               
            <stimulation-sequence-constructor id="STROOP" 
               name="Stroop Task"
               template="STROOP"/>
        </procedures>
        <assets>
            <file-asset file="StroopInstructions.zip">
               <aliases>
                  <alias replace="Slide1" with="NeutralStroopJoystick" />
                  <alias replace="Slide2" with="StroopJoystick" />
                  <alias replace="Slide3" with="NeutralStroopPAD" />
                  <alias replace="Slide4" with="StroopPAD" />
               </aliases>
            </file-asset>
            <file-asset file="StroopScript.py" />
            <file-asset id="Roboto" file="Roboto-Regular.ttf"/>
        </assets>
    </protocol>
    <post-actions>
    </post-actions>
</experiment>