<?xml version="1.0" encoding="UTF-8"?>
<experiment xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
            xsi:noNamespaceSchemaLocation="https://labbench.io/xsd/4.5.0/experiment.xsd">
            <experimental-setup-variants>
                <experimental-setup name="LabBench CPAR+">
                    <devices>
                        <cpar-plus id="dev"/>
                    </devices>
                    <device-mapping>
                      <device-assignment test-type="algometry-stimulus-response" instrument-name="Algometer" device-id="dev" />
                      <device-assignment test-type="algometry-temporal-summation" instrument-name="Algometer" device-id="dev" />
                      <device-assignment test-type="algometry-conditioned-pain-modulation" instrument-name="Algometer" device-id="dev" />
                    </device-mapping>
                  </experimental-setup>        
                  <experimental-setup name="LabBench CPAR+ (Scale on secondary monitor)">
                    <devices>
                        <cpar-plus id="dev"/>
                
                        <display
                            id="display"
                            screen="secondary"
                            position="fullscreen"
                            active-color="rgb(255,0,0)"
                            background-color="rgb(255,255,255)"
                            inactive-color="rgb(16,16,16)"
                            normative-distance="40">
                
                            <monitor 
                                diagonal-size="13"
                                diagonal-size-unit="inch"
                                distance="40"
                                length-unit="cm"/>
                
                            <configurations>
                                <visual-analog-scale
                                    id="vas"
                                    experimental-setup-id="vas"
                                    length="10"
                                    controller-device="dev">
                                    <anchors>
                                        <modality text="" />
                                        <top-anchor text="10/Worst imaginable itch" />
                                        <bottom-anchor text="0/No itch" />
                                    </anchors>
                                </visual-analog-scale>
                            </configurations>
                        </display>
                    </devices>
                    <device-mapping>
                      <device-assignment test-type="algometry-stimulus-response" instrument-name="Algometer" device-id="dev" />
                      <device-assignment test-type="algometry-temporal-summation" instrument-name="Algometer" device-id="dev" />
                      <device-assignment test-type="algometry-conditioned-pain-modulation" instrument-name="Algometer" device-id="dev" />
                    </device-mapping>
                  </experimental-setup>    
                  <experimental-setup name="Nocitech CPAR">
                    <devices>
                        <cpar id="dev" compressor-mode="AUTO"/>
                    </devices>
                    <device-mapping>
                      <device-assignment test-type="algometry-stimulus-response" instrument-name="Algometer" device-id="dev" />
                      <device-assignment test-type="algometry-temporal-summation" instrument-name="Algometer" device-id="dev" />
                      <device-assignment test-type="algometry-conditioned-pain-modulation" instrument-name="Algometer" device-id="dev" />
                    </device-mapping>
                  </experimental-setup>
                  <experimental-setup name="Nocitech CPAR (Scale on secondary monitor)">
                    <devices>
                        <cpar id="dev" compressor-mode="AUTO"/>
            
                        <display
                            id="display"
                            screen="secondary"
                            position="fullscreen"
                            active-color="rgb(255,0,0)"
                            background-color="rgb(255,255,255)"
                            inactive-color="rgb(16,16,16)"
                            normative-distance="40">
                
                            <monitor 
                                diagonal-size="13"
                                diagonal-size-unit="inch"
                                distance="40"
                                length-unit="cm"/>
                
                            <configurations>
                                <visual-analog-scale
                                    id="vas"
                                    experimental-setup-id="vas"
                                    length="10"
                                    controller-device="dev">
                                    <anchors>
                                        <modality text="" />
                                        <top-anchor text="10/Worst imaginable itch" />
                                        <bottom-anchor text="0/No itch" />
                                    </anchors>
                                </visual-analog-scale>
                            </configurations>
                        </display>
                    </devices>
                    <device-mapping>
                      <device-assignment test-type="algometry-stimulus-response" instrument-name="Algometer" device-id="dev" />
                      <device-assignment test-type="algometry-temporal-summation" instrument-name="Algometer" device-id="dev" />
                      <device-assignment test-type="algometry-conditioned-pain-modulation" instrument-name="Algometer" device-id="dev" />
                    </device-mapping>
                  </experimental-setup>    
            </experimental-setup-variants>
                <protocol>
        <defines />
        <tests>
            <algometry-stimulus-response ID="SR01"
                                         name="Stimulus-Response (Cuff 1)"
                                         delta-pressure="1"
                                         pressure-limit="100"
                                         primary-cuff="1"
                                         second-cuff="false"
                                         stop-mode="STOP_CRITERION_ON_BUTTON_PRESSED"
                                         vas-pdt="1.0">
                <dependencies />
            </algometry-stimulus-response>

            <algometry-stimulus-response ID="SR02"
                                         name="Stimulus-Response (Cuff 2)"
                                         delta-pressure="1"
                                         pressure-limit="100"
                                         primary-cuff="2"
                                         second-cuff="false"
                                         stop-mode="STOP_CRITERION_ON_BUTTON_PRESSED"
                                         vas-pdt="1.0">
                <dependencies />
            </algometry-stimulus-response>

            <algometry-stimulus-response ID="SpS"
                                         name="Spatial Summation (Cuff 1 + 2)"
                                         delta-pressure="1"
                                         pressure-limit="100"
                                         primary-cuff="2"
                                         second-cuff="true"
                                         stop-mode="STOP_CRITERION_ON_BUTTON_PRESSED"
                                         vas-pdt="1.0">
                <dependencies />
            </algometry-stimulus-response>

            <algometry-temporal-summation ID="TS"
                                          name="Temporal Summation (Cuff 1)"
                                          no-of-stimuli="10"
                                          pressure-static="5"
                                          pressure-stimulate="1.0 * SR01.PTT"
                                          primary-cuff="1"
                                          second-cuff="false"
                                          t-off="1"
                                          t-on="1">
                <dependencies>
                    <dependency ID="SR01"/>
                </dependencies>
            </algometry-temporal-summation>

            <algometry-conditioned-pain-modulation ID="CPM"
                                                   name="CPM (Cuff 1)"
                                                   conditional-pressure="0.7 * SR02.PTT"
                                                   delta-conditional-pressure="10"
                                                   delta-pressure="1"
                                                   pressure-limit="100"
                                                   primary-cuff="1"
                                                   stop-mode="STOP_CRITERION_ON_BUTTON_PRESSED"
                                                   vas-pdt="1.0">
                <dependencies>
                    <dependency ID="SR02"/>
                </dependencies>
            </algometry-conditioned-pain-modulation>
        </tests>
        <assets>
        </assets>
    </protocol>
</experiment>
