<?xml version="1.0" encoding="UTF-8"?>
<experiment xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
            xsi:schemaLocation="http://labbench.io https://labbench.io/xsd/4.0.0/experiment.xsd"
            name="Temporal Summation and Conditioned Pain Modulation Protocol (Nocitech CPAR)"
            id="ctscpm"
            protocol="ctscpmnct@labbench.io">
  <description />
    <citation>
H. B. Vaegter, T. E. Andersen, M. Harvold, P. G. Andersen, and T. Graven-Nielsen, ‘Increased Pain Sensitivity in Accident-related Chronic Pain Patients With Comorbid Posttraum, Clin. J. Pain, vol. 34, no. 4, pp. 313–321, Apr. 2018, doi: 10.1097/AJP.0000000000000543.
    </citation>

    <experimental-setup>
    <description />
    <devices>
        <cpar id="dev" compressor-mode="AUTO"/>
    </devices>
    <device-mapping>
      <device-assignment test-type="algometry-stimulus-response" instrument-name="Algometer" device-id="dev" />
      <device-assignment test-type="algometry-temporal-summation" instrument-name="Algometer" device-id="dev" />
      <device-assignment test-type="algometry-conditioned-pain-modulation" instrument-name="Algometer" device-id="dev" />
    </device-mapping>
  </experimental-setup>
    <protocol>
        <defines />
        <tests>
            <algometry-stimulus-response ID="SR01"
                                         name="Stimulus-Response (Cuff 1)"
                                         delta-pressure="1"
                                         pressure-limit="100"
                                         primary-cuff="1"
                                         second-cuff="false"
                                         stop-mode="STOP_CRITERION_ON_BUTTON_PRESSED"
                                         vas-pdt="0.1">
                <dependencies />
            </algometry-stimulus-response>

            <algometry-stimulus-response ID="SR02"
                                         name="Stimulus-Response (Cuff 2)"
                                         delta-pressure="1"
                                         pressure-limit="100"
                                         primary-cuff="2"
                                         second-cuff="false"
                                         stop-mode="STOP_CRITERION_ON_BUTTON_PRESSED"
                                         vas-pdt="0.1">
                <dependencies />
            </algometry-stimulus-response>

            <algometry-temporal-summation ID="TS"
                                          name="Temporal Summation (Cuff 1)"
                                          no-of-stimuli="10"
                                          pressure-static="5"
                                          pressure-stimulate="1.0 * SR01.PTT"
                                          primary-cuff="1"
                                          second-cuff="false"
                                          t-off="1"
                                          t-on="1">
                <dependencies>
                    <dependency ID="SR01"/>
                </dependencies>
            </algometry-temporal-summation>

            <algometry-conditioned-pain-modulation ID="CPM"
                                                   name="CPM (Cuff 1)"
                                                   conditional-pressure="0.7 * SR02.PTT"
                                                   delta-conditional-pressure="10"
                                                   delta-pressure="1"
                                                   pressure-limit="100"
                                                   primary-cuff="1"
                                                   stop-mode="STOP_CRITERION_ON_BUTTON_PRESSED"
                                                   vas-pdt="0.1">
                <dependencies>
                    <dependency ID="SR02"/>
                </dependencies>
            </algometry-conditioned-pain-modulation>
        </tests>
        <assets>
        </assets>
    </protocol>
</experiment>

