<?xml version="1.0" encoding="utf-8" ?>
<experiment 
    xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
    xsi:noNamespaceSchemaLocation="https://labbench.io/xsd/4.5.0/experiment.xsd">
<subject-validator 
        regex="^S[0-9]{3}$|^TEST[0-9]{3}$"
        advice="Must be SXXX or TESTXXX, where X is a digit"/>
    <experimental-setup>
        <devices>
            <lio
                id="lio"
                default-analog-output="0">
                <response-devices>
                    <visual-analog-scale id="scale">
                        <button-maps>
                            <map>
                                <button-assignment code="1" button="increase" />
                                <button-assignment code="2" button="decrease" />
                            </map>
                        </button-maps>
                    </visual-analog-scale>
                </response-devices>
            </lio>

            <display
                id="display"
                screen="secondary"
                position="fullscreen"
                active-color="rgb(255,0,0)"
                background-color="rgb(255,255,255)"
                inactive-color="rgb(16,16,16)"
                normative-distance="40">

                <monitor 
                    diagonal-size="13"
                    diagonal-size-unit="inch"
                    distance="40"
                    length-unit="cm"/>

                <configurations>
                    <composite-scale 
                        id="vas"
                        experimental-setup-id="vas"
                        controller-device="lio.scale">

                        <visual-analog-scale 
                            id="itch"
                            length="10"
                            sample-period="200"
                            timing-source="none">

                            <anchors>
                                <modality text="" />
                                <top-anchor text="10/Worst imaginable itch" />
                                <bottom-anchor text="0/No itch" />
                            </anchors>
                        </visual-analog-scale>
                    </composite-scale>

                    <composite-scale 
                        id="nrs"
                        experimental-setup-id="nrs"
                        controller-device="lio.scale">

                        <numerical-scale
                            id="itch"
                            minimum="0"
                            maximum="10"
                            sample-period="200"
                            timing-source="none">
                            <anchors>
                                <modality text="" />
                                <top-anchor text="10/Worst imaginable itch" />
                                <bottom-anchor text="0/No itch" />
                            </anchors>
                        </numerical-scale>
                    </composite-scale>

                    <image-display 
                        id="image"
                        experimental-setup-id="image"
                        background-color="rgb(255,255,255)"/>

                    <survey 
                        id="survey"
                        experimental-setup-id="survey"
                        background-color="rgb(255,255,255)" />                        
                </configurations>
            </display>
        </devices>
        <device-mapping>
            <device-assignment 
                device-id="display.image" 
                test-type="meta-survey" 
                instrument-name="SubjectInstructions" />

            <device-assignment 
                test-type="psychophysics-response-recording"
                test-id="CONRS"
                device-id="display.nrs" 
                instrument-name="Response" />

            <device-assignment 
                test-type="psychophysics-response-recording"
                test-id="COVAS"
                device-id="display.vas" 
                instrument-name="Response" />

            <device-assignment 
                device-id="lio.scale"
                test-type="meta-survey"
                instrument-name="Response"/>
            
            <device-assignment 
                device-id="display.survey" 
                test-type="meta-survey"
                instrument-name="Display" />
        </device-mapping>        
    </experimental-setup>
    <protocol>
        <languages>
            
        </languages>
        <defines>
            
        </defines>
        <templates>
            <variables>
            </variables>
            <content>
                <psychophysics-response-recording 
                    ID="ItchCOVAS"
                    experimental-setup-id="vas"
                    duration="600"
                    sample-rate="1">
                </psychophysics-response-recording>

                <meta-survey 
                    ID="vasHyperknesisRating"
                    control="subject"
                    experimental-setup-id="survey">
                    <variables>
                        <strings value="1;2;3" name="Measurements" />                        
                    </variables>

                    <properties>
                        <instructions 
                            default-instructions="var: operatorInstructions"
                            override-results="true"/>
                        <subject-instructions 
                            experimental-setup-id="image"
                            default="HyperknesisInstructionVAS" />
                    </properties>

                    <templates>
                        <visual-analog-scale 
                            id="vas"
                            instruction=" "
                            length="10"
                            top-anchor="Worst possible itch"
                            bottom-anchor="No itch"                       
                            active-color="rgb(255, 0, 0)"
                            inactive-color="rgb(32, 32, 32)"/>
                    </templates>

                    <content>
                        <foreach variable="n" in="Measurements">
                            <visual-analog-scale
                                id="var: 'M{n}'.format(n = n)"
                                template="vas"
                                title="var: 'Measurement {n}'.format(n = n)"/>
                        </foreach>
                    </content>
                </meta-survey>   

                <psychophysics-response-recording 
                    ID="ItchCONRS"
                    experimental-setup-id="nrs"
                    duration="600"
                    sample-rate="1">
                </psychophysics-response-recording>

                <meta-survey 
                    ID="nrsHyperknesisRating"
                    control="subject"
                    experimental-setup-id="survey">
                    <variables>
                        <strings value="1;2;3" name="Measurements" />
                    </variables>

                    <properties>
                        <instructions 
                            default-instructions="var: operatorInstructions"
                            override-results="true"/>
                        <subject-instructions 
                            experimental-setup-id="image"
                            default="HyperknesisInstructionNRS" />
                    </properties>

                    <templates>
                        <numerical-scale 
                            id="nrs"
                            instruction=" "
                            minimum="0"
                            maximum="10"
                            top-anchor="10/Worst possible itch"
                            bottom-anchor="0/No itch"                       
                            active-color="rgb(255, 0, 0)"
                            inactive-color="rgb(32, 32, 32)"/>
                    </templates>

                    <content>
                        <foreach variable="n" in="Measurements">
                            <numerical-scale 
                                id="var: 'M{n}'.format(n = n)"
                                template="nrs"
                                title="var: 'Measurement {n}'.format(n = n)"/>
                        </foreach>
                    </content>
                </meta-survey>   

                <meta-survey 
                    ID="hyperknesisArea"
                    control="operator" 
                    experimental-setup-id="image">
                    <variables>
                        <strings value="L1;L2;L3;L4;L5;L6;L7;L8" name="Measurements" />
                    </variables>
                    <templates>
                        <numeric id="measurement">
                            <validation 
                                max="10" 
                                max-included="true"
                                min="0"
                                min-included="true" />
                        </numeric>
                    </templates>
                    <content>
                        <foreach variable="m" in="Measurements">
                            <numeric 
                                id="var: m"
                                title="var: 'Measurement ({m})'.format(m = m)"
                                instruction="var: 'Enter the extend of the itch sensation on the {m} axis'.format(m = m)"
                                template="measurement" />
                        </foreach>
                    </content>

                </meta-survey>
            </content>             
        </templates>
        <tests>
            <psychophysics-response-recording-constructor 
                ID="CONRS" 
                name="NRS: Itch Assessment" 
                template="ItchCONRS" />

            <meta-survey-constructor 
                ID="NRS10" 
                name="NRS: Hyperknesis (1.0g)" 
                template="nrsHyperknesisRating">
                <variables>
                    <string value="operatorNRSHyperknesisInstructions1p0" name="operatorInstructions" />
                </variables>
            </meta-survey-constructor>

            <meta-survey-constructor 
                ID="NRS14" 
                name="NRS: Hyperknesis (1.4g)" 
                template="nrsHyperknesisRating">
                <variables>
                    <string value="operatorNRSHyperknesisInstructions1p4" name="operatorInstructions" />
                </variables>
            </meta-survey-constructor>

            <meta-survey-constructor 
                ID="NRS20" 
                name="NRS: Hyperknesis (2.0g)" 
                template="nrsHyperknesisRating">
                <variables>
                    <string value="operatorNRSHyperknesisInstructions2p0" name="operatorInstructions" />
                </variables>
            </meta-survey-constructor>

            <psychophysics-response-recording-constructor 
                ID="COVAS" 
                name="VAS: Itch Assessment" 
                template="ItchCOVAS" />

            <meta-survey-constructor 
                ID="VAS10" 
                name="VAS: Hyperknesis (1.0g)" 
                template="vasHyperknesisRating">
                <variables>
                    <string value="operatorVASHyperknesisInstructions1p0" name="operatorInstructions" />
                </variables>
            </meta-survey-constructor>

            <meta-survey-constructor 
                ID="VAS14" 
                name="VAS: Hyperknesis (1.4g)" 
                template="vasHyperknesisRating">
                <variables>
                    <string value="operatorVASHyperknesisInstructions1p4" name="operatorInstructions" />
                </variables>
            </meta-survey-constructor>

            <meta-survey-constructor 
                ID="VAS20" 
                name="VAS: Hyperknesis (2.0g)" 
                template="vasHyperknesisRating">
                <variables>
                    <string value="operatorVASHyperknesisInstructions2p0" name="operatorInstructions" />
                </variables>
            </meta-survey-constructor>

            <meta-survey-constructor 
                ID="AREA" 
                name="Hyperknesis Area" 
                template="hyperknesisArea" />
        </tests>
        <assets>
            <file-asset id="HyperknesisScript" file="HyperknesisScript.py" />
          
            <file-asset id="operatorNRSHyperknesisInstructions1p0" file="operatorNRSHyperknesisInstructions1p0.rtf" />
            <file-asset id="operatorNRSHyperknesisInstructions1p4" file="operatorNRSHyperknesisInstructions1p4.rtf" />
            <file-asset id="operatorNRSHyperknesisInstructions2p0" file="operatorNRSHyperknesisInstructions2p0.rtf" />
            <file-asset id="HyperknesisInstructionNRS" file="HyperknesisInstructionNRS.png" />

            <file-asset id="operatorVASHyperknesisInstructions1p0" file="operatorVASHyperknesisInstructions1p0.rtf" />
            <file-asset id="operatorVASHyperknesisInstructions1p4" file="operatorVASHyperknesisInstructions1p4.rtf" />
            <file-asset id="operatorVASHyperknesisInstructions2p0" file="operatorVASHyperknesisInstructions2p0.rtf" />
            <file-asset id="HyperknesisInstructionVAS" file="HyperknesisInstructionVAS.png" />
        </assets>
    </protocol>
    <post-actions>
        
    </post-actions>
</experiment>
