<?xml version="1.0" encoding="UTF-8"?>
<protocol xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
          xsi:schemaLocation="http://labbench.io https://labbench.io/xsd/3.2.0/protocol.xsd"
          name="CPAR Demonstration (Version 1)"
          id="introdemo">
    <languages>
        <language code="EN"
                  name="English"/>
        <language code="DA"
                  name="Danish"/>
    </languages>    
    <defines>
        <define name="Text" value="func: TEXT.CreateText"/>
    </defines>
    <tests>        
        <meta-survey ID="SUBJECT"
                     name="Subject">
            <dependencies />
            <content>
                <likert id="SEX"
                        title="Sex"
                        instruction="Please specify the sex of the subject">
                    <choice value="0"
                            label="Female" />
                    <choice value="1"
                            label="Male" />
                    <choice value="2"
                            label="Non-binary"/>
                </likert>
                <numeric id="AGE"
                         title="Age"
                         instruction="Please specify the age of the subject">
                    <validation min="14"
                                min-included="true"
                                max="120"
                                max-included="true"/>
                </numeric>
                <likert id="STATUS"
                        title="Educational status"
                        instruction="What is your current state of education?">
                    <choice value="0" label="I am currently enrolled in an educational institution" />
                    <choice value="1" label="I have completed my education"/>                    
                </likert>
                <numeric id="DURATION"
                         title="Duration of education"
                         instruction="How many years have you been in the educational system?"
                         condition="C['STATUS'] == 0">
                    <validation min="0" min-included="true" max="20" max-included="true"/>
                </numeric>
            </content>
        </meta-survey>

        <meta-survey ID="DASS"
                     name="Depression, Anxietry and Stress Survey">
            <properties>
                <instructions default-instructions="INSTRUCTIONS"
                              override-results="true"/>
            </properties>
            <dependencies>
                <dependency ID="SUBJECT"/>
            </dependencies>
            <condition expression="SUBJECT['STATUS'] == 0"
                       help="The subject must be in the educational system"/>
            <templates>
                <likert id="LIKERT"
                        title="dynamic: Text['QUESTION']">
                    <choice value="0" label="dynamic: Text['L0']"/>
                    <choice value="1" label="dynamic: Text['L1']"/>
                    <choice value="2" label="dynamic: Text['L2']"/>
                    <choice value="3" label="dynamic: Text['L3']"/>
                </likert>
            </templates>
            <content>
                <likert id="I01" template="LIKERT" instruction="dynamic: Text['I01']" />
                <likert id="I02" template="LIKERT" instruction="dynamic: Text['I02']" />
                <likert id="I03" template="LIKERT" instruction="dynamic: Text['I03']" />
                <likert id="I04" template="LIKERT" instruction="dynamic: Text['I04']" />
                <likert id="I05" template="LIKERT" instruction="dynamic: Text['I05']" />
                <likert id="I06" template="LIKERT" instruction="dynamic: Text['I06']" />
                <likert id="I07" template="LIKERT" instruction="dynamic: Text['I07']" />
                <likert id="I08" template="LIKERT" instruction="dynamic: Text['I08']" />
                <likert id="I09" template="LIKERT" instruction="dynamic: Text['I09']" />
                <likert id="I10" template="LIKERT" instruction="dynamic: Text['I10']" />
                <likert id="I11" template="LIKERT" instruction="dynamic: Text['I11']" />
                <likert id="I12" template="LIKERT" instruction="dynamic: Text['I12']" />
                <likert id="I13" template="LIKERT" instruction="dynamic: Text['I13']" />
                <likert id="I14" template="LIKERT" instruction="dynamic: Text['I14']" />
                <likert id="I15" template="LIKERT" instruction="dynamic: Text['I15']" />
                <likert id="I16" template="LIKERT" instruction="dynamic: Text['I16']" />
                <likert id="I17" template="LIKERT" instruction="dynamic: Text['I17']" />
                <likert id="I18" template="LIKERT" instruction="dynamic: Text['I18']" />
                <likert id="I19" template="LIKERT" instruction="dynamic: Text['I19']" />
                <likert id="I20" template="LIKERT" instruction="dynamic: Text['I20']" />
                <likert id="I21" template="LIKERT" instruction="dynamic: Text['I21']" />
                <likert id="I22" template="LIKERT" instruction="dynamic: Text['I22']" />
                <likert id="I23" template="LIKERT" instruction="dynamic: Text['I23']" />
                <likert id="I24" template="LIKERT" instruction="dynamic: Text['I24']" />
                <likert id="I25" template="LIKERT" instruction="dynamic: Text['I25']" />
                <likert id="I26" template="LIKERT" instruction="dynamic: Text['I26']" />
                <likert id="I27" template="LIKERT" instruction="dynamic: Text['I27']" />
                <likert id="I28" template="LIKERT" instruction="dynamic: Text['I28']" />
                <likert id="I29" template="LIKERT" instruction="dynamic: Text['I29']" />
                <likert id="I30" template="LIKERT" instruction="dynamic: Text['I30']" />
                <likert id="I31" template="LIKERT" instruction="dynamic: Text['I31']" />
                <likert id="I32" template="LIKERT" instruction="dynamic: Text['I32']" />
                <likert id="I33" template="LIKERT" instruction="dynamic: Text['I33']" />
                <likert id="I34" template="LIKERT" instruction="dynamic: Text['I34']" />
                <likert id="I35" template="LIKERT" instruction="dynamic: Text['I35']" />
                <likert id="I36" template="LIKERT" instruction="dynamic: Text['I36']" />
                <likert id="I37" template="LIKERT" instruction="dynamic: Text['I37']" />
                <likert id="I38" template="LIKERT" instruction="dynamic: Text['I38']" />
                <likert id="I39" template="LIKERT" instruction="dynamic: Text['I39']" />
                <likert id="I40" template="LIKERT" instruction="dynamic: Text['I40']" />
                <likert id="I41" template="LIKERT" instruction="dynamic: Text['I41']" />
                <likert id="I42" template="LIKERT" instruction="dynamic: Text['I42']" />
            </content>
        </meta-survey>
    </tests>
    <assets>
        <file-asset id="TEXT" file="TEXT_EN.py">
            <language code="DA" file="TEXT_DA.py"/>
        </file-asset>
        <file-asset id="CALCULATIONS" file="Calculations.py" />
        <file-asset id="INSTRUCTIONS"
                    file="DASS_EN.rtf">
            <language code="DA" file="DASS_DA.rtf"/>
        </file-asset>
    </assets>
</protocol>
