<?xml version="1.0" encoding="UTF-8"?>
<experiment xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
            xsi:noNamespaceSchemaLocation="https://labbench.io/xsd/5.0/experiment.xsd">
    <subject-validator regex="^S[0-9]{3}$"
                       advice="Please enter an ID in the form of SXXX, where X is a digit" />
    <experimental-setup-variants default="LIO">
        <experimental-setup name="Joystick" id="JOYSTICK">
            <devices>
                <display id="display"
                         active-color="rgb(255,255,255)"
                         background-color="rgb(0,0,0)"
                         inactive-color="rgb(32,32,32)"
                         position="fullscreen"
                         screen="secondary"
                         normative-distance="40">
                    
                    <monitor
                         diagonal-size="53.34"
                         distance="40" />
    
                    <configurations>
                        <image-display id="image"
                                       experimental-setup-id="image"
                                       background-color="rgb(0,0,0)" />
                    </configurations>
                </display>
                <joystick id="button">
                    <map>
                        <button-assignment code="1" button="button-01"/>
                        <button-assignment code="2" button="button-01"/>
                        <button-assignment code="4" button="button-01"/>
                        <button-assignment code="8" button="button-01"/>
                    </map>
                </joystick>
            </devices>
            <device-mapping>
                <device-assignment instrument-name="ImageDisplay"
                                   device-id="display.image"/>
                <device-assignment instrument-name="Button"
                                   device-id="button"/>
            </device-mapping>
        </experimental-setup>    
        <experimental-setup name="LabBench I/O" id="LIO">
            <devices>
                <display id="display"
                         active-color="rgb(255,255,255)"
                         background-color="rgb(0,0,0)"
                         inactive-color="rgb(32,32,32)"
                         position="fullscreen"
                         screen="secondary"
                         normative-distance="40">
                    
                    <monitor
                         diagonal-size="53.34"
                         distance="40" />
    
                    <configurations>
                        <image-display id="image"
                                       experimental-setup-id="image"
                                       background-color="rgb(0,0,0)" />
                    </configurations>
                </display>
                <joystick id="button">
                    <map>
                        <button-assignment code="1" button="button-01"/>
                        <button-assignment code="2" button="button-01"/>
                        <button-assignment code="4" button="button-01"/>
                        <button-assignment code="8" button="button-01"/>
                    </map>
                </joystick>
            </devices>
            <device-mapping>
                <device-assignment instrument-name="ImageDisplay"
                                   device-id="display.image"/>
                <device-assignment instrument-name="Button"
                                   device-id="button"/>
            </device-mapping>
        </experimental-setup>    
    </experimental-setup-variants>                       
    <protocol>
        <defines>
            <define name="StimulusRepetitions" value="16"/>
            <define name="DisplayTime" value="250"/>
        </defines>
        <tests>
            <stimulation-sequence 
                id="GONOGO"
                name="Go/NoGo Task"
                experimental-setup-id="image"
                response-collection="yes-no"
                stimulus-update-rate="10000">

                <test-events selected="func: Script.Instructions(tc)"
                             complete="func: Script.Evaluate(tc)">
                    <instrument name="ImageDisplay"
                                interface="image-display"/>
                </test-events>
                
                <stimulation-scripts initialize="func: Script.Initialize(tc)"
                                     stimulate="func: Script.Stimulate(tc,x)"
                                     stimulus-description="Image"
                                     stimulus-unit="N/A">
                    <instrument name="Display"
                                interface="image-display"/>
                </stimulation-scripts>
    
                <stimulation-pattern time-base="seconds">
                    <sequence iterations="1">
                        <sequence iterations="1" Tperiod="4" stimulate="false" />
    
                        <uniformly-distributed-sequence minTperiod="1.25"
                                                        maxTperiod="1.75"
                                                        iterations="NumberOfStimuli * StimulusRepetitions" />
                    </sequence>
                </stimulation-pattern>
    
                <stimuli order="block-random">
                    <stimulus name="go" count="4" />
                    <stimulus name="nogo" />
                </stimuli>
            </stimulation-sequence>        
        </tests>
        <assets>
            <file-asset id="EnglishImages" file="images_en.zip" />
            <file-asset id="Script" file="Script.py" />
        </assets>
    </protocol>
    <post-actions>
    </post-actions>
</experiment>