<?xml version="1.0" encoding="utf-8" ?>
<experiment xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
            xsi:schemaLocation="http://labbench.io https://labbench.io/xsd/4.0.0/experiment.xsd">

            <!-- This sodium channel excitability nociceptor testing (SCENT) protocol consists 
                of rectangular and ramp test pulses preceded by hyperpolarizing or depolarizing 
                pre-pulses. The pulse shapes are derived to isolate Sodium curents from Nav1.7, 
                1.8, and 1.9. The protocol was developed by Jenny Tigerholm. Publication pending. 
		
		        The prtocol is designed for testing topical application of compounds affecting 
		        the gating mechanisms of Nav channels. Trine Andresen designed the study-->


    <subject-validator regex="^S\d{2}BL\d$|^S\d{2}AC\d$|^TEST\d+$"
                       advice="ID must be in the form of SXXBLY or SXXACY where X and Y is are digits, or start with TEST followed by digits" />

    <experimental-setup>
        <devices>
            <lio id="dev"
                 default-analog-output="0">
                <stimulators>
                    <ds5 name="Stimulator"
                         transconductance="1mA_1V" />
                </stimulators>
                <response-devices>
                    <button id="button"
                            timing-source="none">
                        <map>
                            <button-assignment code="1" button="button-01" label="1"/>
                        </map>
                    </button>
                </response-devices>
            </lio>
        </devices>
        <device-mapping>
            <device-assignment test-type="psychophysics-stimulus-presentation"
                               instrument-name="Stimulator"
                               device-id="dev" />
            <device-assignment test-type="psychophysics-stimulus-presentation"
                               instrument-name="Trigger"
                               device-id="dev" />
            <device-assignment test-type="psychophysics-stimulus-presentation"
                               instrument-name="Response"
                               device-id="dev.button" />
            
            <device-assignment test-type="psychophysics-threshold-estimation"
                               instrument-name="Button"
                               device-id="dev.button" />
            <device-assignment test-type="psychophysics-threshold-estimation"
                               instrument-name="Stimulator"
                               device-id="dev" />
            <device-assignment test-type="psychophysics-threshold-estimation"
                               instrument-name="Trigger"
                               device-id="dev" />
        </device-mapping>
    </experimental-setup>

    <protocol>
        <defines>
            <define name="PinImax" value="2"/>
            <define name="PatchImax" value="10"/>

            <!-- Stimuli long stimuli -->
            <define name="PLP"
                    value="50"/>

            <!-- Stimuli sodium channels protocol -->
            <!-- parameter for pulse 1-->
            <define name="T1"
                    value="1"/>
            <define name="PT1"
                    value="10"/>
            <define name="PS1"
                    value="-0.2"/>

            <!-- parameter for pulse 2-->
            <define name="T2"
                    value="0.5"/>
            <define name="PT2"
                    value="50"/>
            <define name="PS2"
                    value="-0.2"/>

            <!-- parameter for pulse 3-->
            <define name="T3"
                    value="1"/>
            <define name="PT3"
                    value="50"/>
            <define name="PS3"
                    value="0.2"/>

            <!-- parameter for pulse 4-->
            <define name="T4"
                    value="90"/>
            <define name="PT4"
                    value="90"/>
            <define name="PS4"
                    value="-0.4"/>

            <!-- parameterp for pulse 5-->
            <define name="T5"
                    value="90"/>
            <define name="PT5"
                    value="90"/>
            <define name="PS5"
                    value="0.2"/>

            <!-- Method of Limits -->
            <define name="Istart"
                    value="0.005"/>
            <define name="Naverage"
                    value="1"/>
            <define name="Ndiscard"
                    value="1"/>
            <define name="Ntest"
                    value="2"/>
            <define name="Pdecrease"
                    value="0.2"/>
            <define name="Pmin"
                    value="0.05"/>
            <define name="Pstep"
                    value="0.2"/>

            <!-- Psi Method -->
            <define name="Trials"
                    value="25"/> <!-- ACTUAL VALUE 25 -->
            <define name="Imult"
                    value="4"/>
            <define name="alphaX0"
                    value="0.05"/>
            <define name="alphaN"
                    value="200"/>
            <define name="intensityX0"
                    value="0.05"/>
            <define name="intensityN"
                    value="100"/>
            <define name="Del"
                    value="5"/>
            <define name="betaX0"
                    value="0"/>
            <define name="betaN"
                    value="1.2"/>

            <!-- Up/Down Parameters -->
            <define name="ReversalRule"
                    value="1" />
            <define name="StartIntensity"
                    value="0.001" />
            <define name="StepSize"
                    value="0.25" />
            <define name="StepSizeReduction"
                    value="0.5" />
            <define name="MaxStepSizeReduction"
                    value="0.25"/>
            <define name="SkipRule"
                    value="1"/>
            <define name="StopRule"
                    value="6"/>
        </defines>
        <tests>
            <psychophysics-stimulus-presentation ID="PINFAM"
                                                 name="PIN: Familization"
                                                 stimulus-update-rate="20000">
                <properties>
                    <instructions default-instructions="PINInstructions"
                                  override-results="false"
                                  start-instruction="Start the test" />
                </properties>

                <intensity type="geomspace"
                           x0="PinImax/20.0"
                           x1="PinImax"
                           n="20" />

                <responses response-collection="yes-no" />

                <triggers start-triggger="internal">
                    <trigger duration="1">
                        <code output="Stimulus" value="1"/>
                    </trigger>
                </triggers>
                
                <stimulation>
                    <stimulus>
                        <combined>
                            <pulse Is="x"
                                   Ts="1"
                                   Tdelay="0"/>
                            <pulse Is="-0.2*x"
                                   Ts="5"
                                   Tdelay="1"/>
                        </combined>
                    </stimulus>
                </stimulation>
            </psychophysics-stimulus-presentation>

            <psychophysics-threshold-estimation ID="PINTEST"
                                                name="PIN: Test of subject response"
                                                stimulus-update-rate="20000">
                <dependencies>
                    <dependency ID="PINFAM"/>
                </dependencies>

                <update-rate-random min="2000"
                                    max="3000" />

                <yes-no-task />

                <channels>
                    <channel ID="C01"
                             channel-type="single-sample"
                             name="pulse 1"
                             Imax="PinImax">
                        <up-down-method down-rule="ReversalRule"
                                        up-rule="ReversalRule"
                                        skip-rule="1"
                                        start-intensity="0.1"
                                        step-size-up="StepSize"
                                        step-size-down="StepSize"
                                        step-size-type="relative"
                                        max-step-size-reduction="MaxStepSizeReduction"
                                        step-size-reduction="StepSizeReduction"
                                        initial-direction="increasing"
                                        stop-rule="3">
                            <quick alpha="0.5"
                                   beta="1"
                                   lambda="0.05"
                                   gamma="0.05"/>
                        </up-down-method>

                        <triggers>
                            <trigger duration="1">
                                <code output="Stimulus" value="1"/>
                            </trigger>
                        </triggers>

                        <stimulus>
                            <combined>
                                <pulse Is="x"
                                       Ts="1"
                                       Tdelay="0"/>
                                <pulse Is="-0.2*x"
                                       Ts="5"
                                       Tdelay="1"/>
                            </combined>
                        </stimulus>
                    </channel>
                </channels>
            </psychophysics-threshold-estimation>

            <psychophysics-threshold-estimation ID="PINPsiS"
                                                name="Start values for SCENT"
                                                stimulus-update-rate="20000">
                <dependencies>
                    <dependency ID="PINTEST"/>
                </dependencies>
                                
                <update-rate-random min="2000"
                                    max="3000" />
                <!-- interval in ms between the stimuli-->
                <!--  <update-rate-random min="RL" max="RH" /> -->
                <yes-no-task  />

                <channels>
                    <channel ID="C01"
                             channel-type="single-sample"
                             name="pulse 1"
                             Imax="PinImax">
                        <up-down-method down-rule="1"
                                        up-rule="1"
                                        skip-rule="1"
                                        start-intensity="0.5 * PINTEST['C01']"
                                        step-size-up="StepSize"
                                        step-size-down="StepSize"
                                        step-size-type="relative"
                                        max-step-size-reduction="MaxStepSizeReduction"
                                        step-size-reduction="StepSizeReduction"
                                        initial-direction="increasing"
                                        stop-rule="3">
                            <quick alpha="0.5" beta="1" lambda="0.02" gamma="0.0" />
                        </up-down-method>

                        <triggers>
                            <trigger duration="1">
                                <code output="Stimulus" value="1"/>
                            </trigger>
                        </triggers>

                        <stimulus>
                            <combined>
                                <pulse Is="PS1*x"
                                       Ts="PT1+T1"
                                       Tdelay="0"/>
                                <pulse Is="x-PS1*x"
                                       Ts="T1"
                                       Tdelay="PT1"/>
                                <pulse Is="-1*((PS1*x)*(PT1+T1)+(x-PS1*x)*T1)/(PT1*5+T1*5)"
                                       Ts="PT1*5+T1*5"
                                       Tdelay="PT1+T1+Del"/>
                            </combined>
                        </stimulus>
                    </channel>

                    <channel ID="C02"
                             channel-type="single-sample"
                             name="pulse 2"
                             Imax="PinImax">
                        <up-down-method down-rule="1"
                                        up-rule="1"
                                        skip-rule="1"
                                        start-intensity="0.5 * PINTEST['C01']"
                                        step-size-up="StepSize"
                                        step-size-down="StepSize"
                                        step-size-type="relative"
                                        max-step-size-reduction="MaxStepSizeReduction"
                                        step-size-reduction="StepSizeReduction"
                                        initial-direction="increasing"
                                        stop-rule="3">
                            <quick alpha="0.5" beta="1" lambda="0.02" gamma="0.0" />
                        </up-down-method>

                        <triggers>
                            <trigger duration="1">
                                <code output="Stimulus" value="1"/>
                            </trigger>
                        </triggers>

                        <stimulus>
                            <combined>
                                <pulse Is="PS2*x"
                                       Ts="PT2+T2"
                                       Tdelay="0"/>
                                <pulse Is="x-PS2*x"
                                       Ts="T2"
                                       Tdelay="PT2"/>
                                <pulse Is="-1*((PS2*x)*(PT2+T2)+(x-PS2*x)*T2)/(PT2*5+T2*5)"
                                       Ts="PT2*5+T2*5"
                                       Tdelay="PT2+T2+Del"/>

                            </combined>
                        </stimulus>
                    </channel>

                    <channel ID="C03"
                             channel-type="single-sample"
                             name="Pulse 5"
                             Imax="PinImax">
                        <up-down-method down-rule="1"
                                        up-rule="1"
                                        skip-rule="1"
                                        start-intensity="0.5 * PINTEST['C01']"
                                        step-size-up="StepSize"
                                        step-size-down="StepSize"
                                        step-size-type="relative"
                                        max-step-size-reduction="MaxStepSizeReduction"
                                        step-size-reduction="StepSizeReduction"
                                        initial-direction="increasing"
                                        stop-rule="3">
                            <quick alpha="0.5" beta="1" lambda="0.02" gamma="0.0" />
                        </up-down-method>

                        <triggers>
                            <trigger duration="1">
                                <code output="Stimulus" value="1"/>
                            </trigger>
                        </triggers>

                        <stimulus>
                            <combined>
                                <pulse Is="PS5*x"
                                       Ts="PT5+T5"
                                       Tdelay="0"/>
                                <ramp Is="x-PS5*x"
                                      Ts="T5"
                                      Tdelay="PT5"/>
                                <pulse Is="-1*((PS5*x)*(PT5+T5)+((x-PS5*x)*T5)*0.5)/(PT5*5+T5*5)"
                                       Ts="PT5*5+T5*5"
                                       Tdelay="PT5+T5+Del"/>
                            </combined>
                        </stimulus>
                    </channel>
                </channels>
            </psychophysics-threshold-estimation>

            <psychophysics-threshold-estimation ID="SCENT"
                                                name= "PIN: Psi SCENT"
                                                stimulus-update-rate="20000">
                <dependencies>
                    <dependency ID="PINPsiS"/>
                </dependencies>
                <update-rate-random min="2000"
                                    max="3000" />
                <!-- interval in ms between the stimuli-->
                <yes-no-task />

                <channels>
                    <!-- input 1-->
                    <channel ID="C01"
                             channel-type="single-sample"
                             name="Pulse 1"
                             Imax="Imult *PINPsiS['C01'] if Imult * PINPsiS['C01'] &lt; Stimulator.Imax else Stimulator.Imax">
                        <channel-dependencies>
                        </channel-dependencies>
                        <psi-method number-of-trials="Trials">
                            <quick alpha="0.5"
                                   beta="1"
                                   lambda="0.05"
                                   gamma="0.05" />
                            <beta type="linspace"
                                  base="10"
                                  x0="betaX0"
                                  x1="betaN"
                                  n="20"/>
                            <alpha type="linspace"
                                   x0="alphaX0"
                                   x1="1"
                                   n="alphaN" />
                            <intensity type="linspace"
                                       x0="intensityX0"
                                       x1="1"
                                       n="intensityN" />
                        </psi-method>

                        <triggers>
                            <trigger duration="1">
                                <code output="Stimulus" value="1"/>
                            </trigger>
                        </triggers>

                        <stimulus>
                            <combined>
                                <pulse Is="PS1*x"
                                       Ts="PT1+T1"
                                       Tdelay="0"/>
                                <pulse Is="x-PS1*x"
                                       Ts="T1"
                                       Tdelay="PT1"/>
                                <pulse Is="-1*((PS1*x)*(PT1+T1)+(x-PS1*x)*T1)/(PT1*5+T1*5)"
                                       Ts="PT1*5+T1*5"
                                       Tdelay="PT1+T1+Del"/>
                            </combined>
                        </stimulus>
                    </channel>

                    <!-- input 2-->
                    <channel ID="C02"
                             channel-type="single-sample"
                             name="pulse 2"
                             Imax="Imult*1.4*PINPsiS['C02'] if Imult *1.4*PINPsiS['C02'] &lt; Stimulator.Imax else Stimulator.Imax">
                        <channel-dependencies>
                        </channel-dependencies>
                        <psi-method number-of-trials="Trials">
                            <quick alpha="0.5"
                                   beta="1"
                                   lambda="0.05"
                                   gamma="0.05" />
                            <beta type="linspace"
                                  base="10"
                                  x0="betaX0"
                                  x1="betaN"
                                  n="20"/>
                            <alpha type="linspace"
                                   x0="alphaX0"
                                   x1="1"
                                   n="alphaN" />
                            <intensity type="linspace"
                                       x0="intensityX0"
                                       x1="1"
                                       n="intensityN" />
                        </psi-method>

                        <triggers>
                            <trigger duration="1">
                                <code output="Stimulus" value="1"/>
                            </trigger>
                        </triggers>

                        <stimulus>
                            <combined>
                                <pulse Is="PS2*x"
                                       Ts="PT2+T2"
                                       Tdelay="0"/>
                                <pulse Is="x-PS2*x"
                                       Ts="T2"
                                       Tdelay="PT2"/>
                                <pulse Is="-1*((PS2*x)*(PT2+T2)+(x-PS2*x)*T2)/(PT2*5+T2*5)"
                                       Ts="PT2*5+T2*5"
                                       Tdelay="PT2+T2+Del"/>
                            </combined>
                        </stimulus>
                    </channel>

                    <!-- input 3 -->
                    <channel ID="C03"
                             channel-type="single-sample"
                             name="pulse 3"
                             Imax="Imult*0.8*PINPsiS['C01'] if Imult*0.8*PINPsiS['C01'] &lt; Stimulator.Imax else Stimulator.Imax">
                        <channel-dependencies>
                        </channel-dependencies>
                        <psi-method number-of-trials="Trials">
                            <quick alpha="0.5"
                                   beta="1"
                                   lambda="0.05"
                                   gamma="0.05" />
                            <beta type="linspace"
                                  base="10"
                                  x0="betaX0"
                                  x1="betaN"
                                  n="20"/>
                            <alpha type="linspace"
                                   x0="alphaX0"
                                   x1="1"
                                   n="alphaN" />
                            <intensity type="linspace"
                                       x0="intensityX0"
                                       x1="1"
                                       n="intensityN" />
                        </psi-method>

                        <triggers>
                            <trigger duration="1">
                                <code output="Stimulus" value="1"/>
                            </trigger>
                        </triggers>

                        <stimulus>
                            <combined>
                                <pulse Is="PS3*x"
                                       Ts="PT3+T3"
                                       Tdelay="0"/>
                                <pulse Is="x-PS3*x"
                                       Ts="T3"
                                       Tdelay="PT3"/>
                                <pulse Is="-1*((PS3*x)*(PT3+T3)+(x-PS3*x)*T3)/(PT3*5+T3*5)"
                                       Ts="PT3*5+T3*5"
                                       Tdelay="PT3+T3+Del"/>
                            </combined>
                        </stimulus>
                    </channel>

                    <!-- input 4 -->
                    <channel ID="C04"
                             channel-type="single-sample"
                             name="pulse 4"
                             Imax="Imult * PINPsiS['C03'] if Imult * PINPsiS['C03'] &lt; Stimulator.Imax else Stimulator.Imax">
                        <channel-dependencies>
                        </channel-dependencies>
                        <psi-method number-of-trials="Trials">
                            <quick alpha="0.5"
                                   beta="1"
                                   lambda="0.05"
                                   gamma="0.05" />
                            <beta type="linspace"
                                  base="10"
                                  x0="betaX0"
                                  x1="betaN"
                                  n="20"/>
                            <alpha type="linspace"
                                   x0="alphaX0"
                                   x1="1"
                                   n="alphaN" />
                            <intensity type="linspace"
                                       x0="intensityX0"
                                       x1="1"
                                       n="intensityN" />
                        </psi-method>

                        <triggers>
                            <trigger duration="1">
                                <code output="Stimulus" value="1"/>
                            </trigger>
                        </triggers>

                        <stimulus>
                            <combined>
                                <pulse Is="PS4*x"
                                       Ts="PT4+T4"
                                       Tdelay="0"/>
                                <ramp Is="x-PS4*x"
                                      Ts="T4"
                                      Tdelay="PT4"/>
                                <pulse Is="-1*((PS4*x)*(PT4+T4)+((x-PS4*x)*T4)*0.5)/(PT4*5+T4*5)"
                                       Ts="PT4*5+T4*5"
                                       Tdelay="PT4+T4+Del"/>
                            </combined>
                        </stimulus>
                    </channel>

                    <!-- input 5 -->
                    <channel ID="C05"
                             channel-type="single-sample"
                             name="pulse 5"
                             Imax="Imult *( PINPsiS['C03']) if Imult * (PINPsiS['C03']) &lt; Stimulator.Imax else Stimulator.Imax">
                        <channel-dependencies>
                        </channel-dependencies>
                        <psi-method number-of-trials="Trials">
                            <quick alpha="0.5"
                                   beta="1"
                                   lambda="0.05"
                                   gamma="0.05" />
                            <beta type="linspace"
                                  base="10"
                                  x0="betaX0"
                                  x1="betaN"
                                  n="20"/>
                            <alpha type="linspace"
                                   x0="alphaX0"
                                   x1="1"
                                   n="alphaN" />
                            <intensity type="linspace"
                                       x0="intensityX0"
                                       x1="1"
                                       n="intensityN" />
                        </psi-method>

                        <triggers>
                            <trigger duration="1">
                                <code output="Stimulus" value="1"/>
                            </trigger>
                        </triggers>

                        <stimulus>
                            <combined>
                                <pulse Is="PS5*x"
                                       Ts="PT5+T5"
                                       Tdelay="0"/>
                                <ramp Is="x-PS5*x"
                                      Ts="T5"
                                      Tdelay="PT5"/>
                                <pulse Is="-1*((PS5*x)*(PT5+T5)+((x-PS5*x)*T5)*0.5)/(PT5*5+T5*5)"
                                       Ts="PT5*5+T5*5"
                                       Tdelay="PT5+T5+Del"/>
                            </combined>
                        </stimulus>
                    </channel>
                </channels>
            </psychophysics-threshold-estimation>
            


        </tests>
        <assets>
            <file-asset id="PINInstructions"
                        file="PINInstructions.rtf" />
            <file-asset id="PATCHInstructions"
                        file="PATCHInstructions.rtf" />
            <file-asset id="Script" file="Script.py" />
        </assets>
    </protocol>

    <post-actions>
        <export-data name="Exporting session to MATLAB"
                     location="C:\LabBenchExport\SCENTPharm"
                     filename="dynamic: '{session}-{time}.mat'.format(session = SESSION_NAME, time = SESSION_TIME)"
                     format="matlab"/>
    </post-actions>
</experiment>
