<?xml version="1.0" encoding="utf-8" ?>
<experiment xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
            xsi:noNamespaceSchemaLocation="https://labbench.io/xsd/5.0/experiment.xsd">
   <experimental-setup-variants>
    <experimental-setup name="Joystick" id="JOYSTICK">
        <devices>
            <joystick id="joystick">
                <map>
                    <button-assignment code="80" button="left" label="Left"/> <!-- number: 5-->
                    <button-assignment code="160" button="right" label="Right"/> <!--  number: 7 -->
                </map>
            </joystick>

            <display
                id="display"
                active-color="rgb(255,255,255)"
                background-color="rgb(0,0,0)"
                inactive-color="rgb(32,32,32)"
                normative-distance="40"
                position="fullscreen"
                screen="secondary">

                <monitor
                    diagonal-size="53.34"
                    distance="40" />

                <configurations>
                    <image-display
                        id="image"
                        experimental-setup-id="image"
                        background-color="rgb(0,0,0)" />
                </configurations>                
            </display>         
        </devices>
        <device-mapping>
            <device-assignment device-id="joystick" instrument-name="Button" />
            <device-assignment device-id="display.image" instrument-name="ImageDisplay"/>
        </device-mapping>        
    </experimental-setup>    
    <experimental-setup name="LabBench I/O" id="LIO">
        <devices>
            <lio
                id="lio" 
                default-analog-output="0">
                <response-devices>
                    <response-pad
                        id="pad" 
                        type="button-4-cross" 
                        timing-source="response-port02">
                        <map>
                            <button-assignment code="5" button="left" label="Left" />
                            <button-assignment code="6" button="right" label="Right" />
                        </map>
                    </response-pad>
                    <visual-trigger 
                        id="vtrig"
                        arming-period="200" 
                        timing-source="response-port02" />
                </response-devices>
            </lio>

            <display
                id="display"
                active-color="rgb(255,255,255)"
                background-color="rgb(0,0,0)"
                inactive-color="rgb(32,32,32)"
                normative-distance="40"
                position="fullscreen"
                screen="secondary">

                <monitor
                    diagonal-size="53.34"
                    distance="40" />

                <configurations>
                    <image-display
                        id="image"
                        experimental-setup-id="image"
                        background-color="rgb(0,0,0)" />
                </configurations>                
            </display>         
        </devices>
        <device-mapping>
            <device-assignment device-id="lio.pad" instrument-name="Button" />
            <device-assignment device-id="display.image" instrument-name="ImageDisplay"/>
        </device-mapping>        
    </experimental-setup>
   </experimental-setup-variants>                    
    <protocol>
        <defines>
            <define name="TrainingStopSignals" value="4"/> 
            <define name="NumberOfStopSignals" value="2"/> <!-- Old value 30 -->
            <define name="LowDelayLimit" value="50"/>
            <define name="HighDelayLimit" value="750"/>
            <define name="FixationDelay"  value="500"/>
            <define name="ResponseTimeout"  value="1000"/>
            <define name="FeedbackDelay" value="1000"/>            
            <define name="FeedbackTime" value="1000"/>
            <define name="Pause" value="1000"/>
            <define name="Period" value="(FixationDelay + ResponseTimeout + FeedbackDelay + FeedbackTime + Pause)/1000"/>
            <define name="Trials" value="30"/>
            <define name="AlphaX0" value="0.0"/>
            <define name="AlphaN" value="200"/>
            <define name="BetaX0" value="-2"/> <!--  Old value: -1.2041 -->
            <define name="BetaX1" value="2"/> <!--  Old value: 1.2041 -->
            <define name="BetaN" value="50"/>
            <define name="IntensityX0" value="0.0"/>
            <define name="IntensityN" value="50"/>
            <define name="ConfidenceLevel" value="0.95"/>
        </defines>
        <tests>
            <stimulation-sequence id="T01"
                name="Stop Signal Task (Training Task)"
                experimental-setup-id="image"
                response-collection="none"
                stimulus-update-rate="44100">
                <test-events complete="func: Script.Complete(tc)" />

                <properties>
                    <subject-instructions experimental-setup-id="image"
                        default="Assets.Images.Instructions" />
                </properties>

                <stimulation-scripts initialize="func: Script.UpDownInitialize(tc)"
                                     stimulate="func: Script.Stimulate(tc,x)"
                                     stimulus-description="Image"
                                     stimulus-unit="N/A">
                    <instrument name="ImageDisplay" interface="image-display"/>
                    <instrument name="Button" interface="button"/>
                </stimulation-scripts>

                <stimulation-pattern time-base="seconds">
                    <sequence Tperiod="Period" iterations="NumberOfStimuli * TrainingStopSignals" />                        
                </stimulation-pattern>

                <stimuli order="block-random">
                    <stimulus name="GO" count="3" />
                    <stimulus name="STOP" count="1"/>
                </stimuli>

            </stimulation-sequence>

            <stimulation-sequence id="T02"
                name="Stop Signal Task"
                experimental-setup-id="image"
                response-collection="none"
                stimulus-update-rate="44100">

                <test-events complete="func: Script.Complete(tc)" />

                <properties>
                    <subject-instructions experimental-setup-id="image"
                        default="Assets.Images.Instructions" />
                </properties>

                <stimulation-scripts initialize="func: Script.PsiInitialize(tc)"
                                     stimulate="func: Script.Stimulate(tc,x)"
                                     stimulus-description="Image"
                                     stimulus-unit="N/A">
                    <instrument name="ImageDisplay" interface="image-display"/>
                    <instrument name="Button" interface="button"/>
                </stimulation-scripts>

                <stimulation-pattern time-base="seconds">
                    <sequence Tperiod="Period" iterations="NumberOfStimuli * NumberOfStopSignals" />
                </stimulation-pattern>

                <stimuli order="block-random">
                    <stimulus name="GO" count="3" />                        
                    <stimulus name="STOP" count="1"/>
                </stimuli>
            </stimulation-sequence>    

            <stimulation-sequence id="T03"
                name="Stop Signal Game"
                experimental-setup-id="image"
                response-collection="none"
                stimulus-update-rate="44100">

                <test-events complete="func: Script.Complete(tc)" />

                <properties>
                    <subject-instructions experimental-setup-id="image"
                        default="Assets.Images.Instructions" 
                        completed="func: Script.DisplayScore(tc)"/>
                </properties>

                <stimulation-scripts initialize="func: Script.PsiGameInitialize(tc)"
                                     stimulate="func: Script.Stimulate(tc,x)"
                                     stimulus-description="Image"
                                     stimulus-unit="N/A">
                    <instrument name="ImageDisplay" interface="image-display"/>
                    <instrument name="Button" interface="button"/>
                </stimulation-scripts>

                <stimulation-pattern time-base="seconds">
                    <sequence Tperiod="Period" iterations="NumberOfStimuli * NumberOfStopSignals" />
                </stimulation-pattern>

                <stimuli order="block-random">
                    <stimulus name="GO" count="3" />                        
                    <stimulus name="STOP" count="1"/>
                </stimuli>
            </stimulation-sequence>    
        </tests>
        <assets>
            <file-asset id="Images" file="Images.zip" />
            <file-asset id="Script" file="Script.py" />
            <file-asset id="Roboto" file="Roboto-Regular.ttf" />
        </assets>
    </protocol>
    <post-actions>
        
    </post-actions>
</experiment>
