<?xml version="1.0" encoding="UTF-8"?>
<experiment 
   xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
   xsi:noNamespaceSchemaLocation="https://labbench.io/xsd/5.0/experiment.xsd">
   <subject-validator 
      regex="^S[0-9]{3}$"
      advice="Please enter an ID in the form of SXXX, where X is a digit" />

   <experimental-setup-variants default="LIO">         
      <experimental-setup name="LabBench I/O" id="LIO">
         <devices>
            <display id="display"
               active-color="rgb(255,255,255)"
               background-color="rgb(0,0,0)"
               inactive-color="rgb(32,32,32)"
               position="fullscreen"
               screen="secondary"
               fiducial-position="upper-right"
               normative-distance="40">

               <monitor diagonal-size="35.5" distance="40" />
               <fiducial x="17" y="17" size="10"/>

               <configurations>
                  <image-display id="image" experimental-setup-id="reverseStroopSetup" background-color="rgb(0,0,0)" />
               </configurations>
            </display>

            <lio id="lio" default-analog-output="0">
               <trigger-setup low-byte-voltage-level="5.0V" high-byte-voltage-level="unconnected" logic-system="positive"/>               
               <response-devices>                  
                  <visual-trigger id="trigger" timing-source="response-port01"/>
                  <response-pad id="pad" timing-source="response-port01" type="button-4-cross">
                     <map experimental-setup-id="reverseStroopSetup">
                        <button-assignment code="1" button="button-01" label="blue" />
                        <button-assignment code="2" button="button-02" label="yellow" />
                        <button-assignment code="3" button="button-03" label="red" />
                        <button-assignment code="4" button="button-04" label="green" />
                     </map>
                  </response-pad>
               </response-devices>
            </lio>
         </devices>
         <device-mapping>
            <device-assignment device-id="display.image" instrument-name="ImageDisplay"/>
            <device-assignment device-id="lio.pad" instrument-name="Button"/>     
            <device-assignment device-id="lio" instrument-name="TriggerGenerator" />        
         </device-mapping>
      </experimental-setup>        
   </experimental-setup-variants>
   
   <protocol>
      <defines>
         <define name="StroopStimulusRepetitions" value="6"/>
         <define name="StroopDisplayTime" value="1500"/>
         <define name="StroopColors" value="{'b': '#0000FF','y': '#FFFF00','r': '#FF0000','g': '#00FF00'}"/>
         <define name="StroopWords" value="{'b': 'BLUE','y': 'YELLOW','r': 'RED','g': 'GREEN'}"/>
      </defines>
      <templates>
         <content>
            <stimulation-sequence id="NRSTROOPTrial"
               experimental-setup-id="reverseStroopSetup"
               response-collection="yes-no"
               stimulus-update-rate="10000">

               <test-events complete="func: StroopReverseScript.StroopEvaluate(tc)" />

               <properties>
                  <subject-instructions 
                     experimental-setup-id="reverseStroopSetup" 
                     default="Assets.StroopReverseInstructions.NeutralReverseStroopJoystick if ExperimentalSetup == 'JOYSTICK' else Assets.StroopReverseInstructions.NeutralReverseStroopPAD"/>
               </properties>                                

               <configuration>
                  <trigger-generation trigger-source="none" />
               </configuration>
              
               <stimulation-scripts 
                  initialize="True"
                  stimulate="func: StroopReverseScript.ReverseStroopNeutralStimulate(tc,x)"
                  stimulus-description="Image"
                  stimulus-unit="N/A">
                  <instrument name="ImageDisplay" interface="image-display"/>
                  <instrument name="TriggerGenerator" interface="trigger-generator" />
               </stimulation-scripts>
    
               <stimulation-pattern time-base="seconds">
                  <sequence iterations="1">
                     <sequence iterations="1" Tperiod="4" stimulate="false" />    
                     <uniformly-distributed-sequence minTperiod="3" maxTperiod="5" iterations="NumberOfStimuli" />
                  </sequence>
               </stimulation-pattern>
    
               <stimuli order="block-random">
                  <stimulus name="rn" />
                  <stimulus name="gn" />
                  <stimulus name="bn" />
                  <stimulus name="yn" />                
               </stimuli>
            </stimulation-sequence>

            <stimulation-sequence id="NRSTROOP"
               experimental-setup-id="reverseStroopSetup"
               response-collection="yes-no"
               stimulus-update-rate="10000">

               <test-events complete="func: StroopReverseScript.StroopEvaluate(tc)" />
                
               <properties>
                  <subject-instructions 
                     experimental-setup-id="reverseStroopSetup" 
                     default="Assets.StroopReverseInstructions.NeutralReverseStroopJoystick if ExperimentalSetup == 'JOYSTICK' else Assets.StroopReverseInstructions.NeutralReverseStroopPAD"/>
               </properties>                                

               <dependencies>
                  <dependency id="NRSTROOPTrial"/>
               </dependencies>

               <stimulation-scripts 
                  initialize="True"
                  stimulate="func: StroopReverseScript.ReverseStroopNeutralStimulate(tc,x)"
                  stimulus-description="Image"
                  stimulus-unit="N/A">
                  <instrument name="ImageDisplay" interface="image-display"/>
                  <instrument name="TriggerGenerator" interface="trigger-generator" />
               </stimulation-scripts>
    
                <stimulation-pattern time-base="seconds">
                    <sequence iterations="1">
                        <sequence iterations="1" Tperiod="4" stimulate="false" />                        
                        <uniformly-distributed-sequence minTperiod="3" maxTperiod="5" iterations="StroopStimulusRepetitions * NumberOfStimuli" />
                    </sequence>
                </stimulation-pattern>
    
                <stimuli order="block-random">
                    <stimulus name="rn" />
                    <stimulus name="gn" />
                    <stimulus name="bn" />
                    <stimulus name="yn" />
                </stimuli>
            </stimulation-sequence>

            <stimulation-sequence id="RSTROOPTrial"
               experimental-setup-id="reverseStroopSetup"
               response-collection="yes-no"
               stimulus-update-rate="10000">

               <test-events complete="func: StroopReverseScript.StroopEvaluate(tc)" />

               <properties>
                  <subject-instructions 
                     experimental-setup-id="reverseStroopSetup" 
                     default="Assets.StroopReverseInstructions.ReverseStroopJoystick if ExperimentalSetup == 'JOYSTICK' else Assets.StroopReverseInstructions.ReverseStroopPAD"/>
               </properties>                                                    
               
               <stimulation-scripts 
                  initialize="True"
                  stimulate="func: StroopReverseScript.ReverseStroopStimulate(tc,x)"
                  stimulus-description="Image"
                  stimulus-unit="N/A">
                  <instrument name="ImageDisplay" interface="image-display"/>
                  <instrument name="TriggerGenerator" interface="trigger-generator" />
               </stimulation-scripts>
    
               <stimulation-pattern time-base="seconds">
                  <sequence iterations="1">
                     <sequence iterations="1" Tperiod="4" stimulate="false" />    
                     <uniformly-distributed-sequence minTperiod="3" maxTperiod="5" iterations="NumberOfStimuli" />
                  </sequence>
               </stimulation-pattern>
    
               <stimuli order="block-random">
                  <stimulus name="rr" />
                  <stimulus name="gg" />
                  <stimulus name="bb" />
                  <stimulus name="yy" />
                  <stimulus name="rg" />
                  <stimulus name="gb" />
                  <stimulus name="by" />
                  <stimulus name="yr" />
               </stimuli>
            </stimulation-sequence>

            <stimulation-sequence id="RSTROOP"
               experimental-setup-id="reverseStroopSetup"
               response-collection="yes-no"
               stimulus-update-rate="10000">

               <test-events complete="func: StroopReverseScript.StroopEvaluate(tc)" />
    
               <properties>
                  <subject-instructions 
                     experimental-setup-id="reverseStroopSetup" 
                     default="Assets.StroopReverseInstructions.ReverseStroopJoystick if ExperimentalSetup == 'JOYSTICK' else Assets.StroopReverseInstructions.ReverseStroopPAD"/>
               </properties>                                                    

               <dependencies>
                  <dependency id="RSTROOPTrial"/>
               </dependencies>

               <stimulation-scripts 
                  initialize="True"
                  stimulate="func: StroopReverseScript.ReverseStroopStimulate(tc,x)"
                  stimulus-description="Image"
                  stimulus-unit="N/A">
                  <instrument name="ImageDisplay" interface="image-display"/>
                  <instrument name="TriggerGenerator" interface="trigger-generator" />
               </stimulation-scripts>
    
               <stimulation-pattern time-base="seconds">
                  <sequence iterations="1">
                     <sequence iterations="1" Tperiod="4" stimulate="false" />
                     <uniformly-distributed-sequence minTperiod="3" maxTperiod="5" iterations="(StroopStimulusRepetitions/3)*NumberOfStimuli" />
                  </sequence>
               </stimulation-pattern>
    
               <stimuli order="block-random">
                  <stimulus name="rr" count="3" />
                  <stimulus name="rg" />
                  <stimulus name="rb" />
                  <stimulus name="ry" />

                  <stimulus name="gr" />
                  <stimulus name="gg" count="3"/>
                  <stimulus name="gb" />
                  <stimulus name="gy" />

                  <stimulus name="br" />
                  <stimulus name="bg" />
                  <stimulus name="bb" count="3"/>
                  <stimulus name="by" />

                  <stimulus name="yr" />
                  <stimulus name="yb" />
                  <stimulus name="yg" />
                  <stimulus name="yy" count="3"/>
               </stimuli>
            </stimulation-sequence>        
         </content>
      </templates>
        <tests>            
            <stimulation-sequence-constructor id="NRSTROOPTrial" 
               name="Neutral Reverse Stroop Task (Trial)"
               template="NRSTROOPTrial"/>

            <stimulation-sequence-constructor id="NRSTROOP" 
               name="Neutral Reverse Stroop Task"
               template="NRSTROOP"/>

            <stimulation-sequence-constructor id="RSTROOPTrial" 
               name="Reverse Stroop Task (Trial)"
               template="RSTROOPTrial"/>

            <stimulation-sequence-constructor id="RSTROOP" 
               name="Reverse Stroop Task"
               template="RSTROOP"/>
        </tests>
        <assets>
            <file-asset id="StroopReverseInstructions" file="StroopReverseInstructions.zip"/>
            <file-asset id="StroopReverseScript" file="StroopReverseScript.py" />
            <file-asset id="Roboto" file="Roboto-Regular.ttf"/>
        </assets>
    </protocol>
    <post-actions>
    </post-actions>
</experiment>